PsychoPy2experiment version="2025.1.1"
Settings
  Audio lib = ptb
  Data filename = u'data/sub-%s_ses-%s_emoback' % (expInfo['Please enter the Subject ID:'], expInfo['Please enter the Session Number:'])
  Experiment info = {'Please enter the Subject ID:': '', 'Please enter the Session Number:': '[1, 2]', "Enter subject\\'s handedness:": "['Right', 'Left']", 'Please select version:': '[1,2,3,4]'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = EmoNback_Behavioral
  keyboardBackend = PsychToolbox
  runMode = 1
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Routines
  Routine TitlePage
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    KeyboardComponent Continue
      allowedKeys = '2','3','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextboxComponent NbackTitle
      bold = True
      borderWidth = 0
      color = black
      editable = False
      letterHeight = 0.05
      size = (1, 1)
      startVal [time (s)] = 0.0
      text = N-back
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    CodeComponent setupLogic
      Code Type = Py
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      Before Experiment:
        # Import modules at the very top
        import os
        import re
        import csv
        import pandas as pd
        from psychopy import data

        # Get root folder
        expRoot = os.getcwd()
      Begin Experiment:
        # Version selected
        selectedVersion = int(expInfo['Please select version:'])
        versionFolder = f"NBackProcLists/v{selectedVersion}"
        versionPath = os.path.join(expRoot, versionFolder)

        # Paths to runs
        run1Folder = os.path.join(versionPath, 'run1')
        run2Folder = os.path.join(versionPath, 'run2')

        # Numeric sort function for blocks
        def numeric_sort(value):
            match = re.search(r'block(\d+)', value, re.IGNORECASE)
            return int(match.group(1)) if match else 0

        # Sorted list of block CSV files
        blockFilesRun1 = sorted(
            [f for f in os.listdir(run1Folder) if f.endswith('.csv')],
            key=numeric_sort
        )
        blockFilesRun2 = sorted(
            [f for f in os.listdir(run2Folder) if f.endswith('.csv')],
            key=numeric_sort
        )

        # Initial block index
        blockIndex1 = 0
        blockIndex2 = 0

        # Get number of blocks per run
        num_blocks_run1 = len(blockFilesRun1)
        num_blocks_run2 = len(blockFilesRun2)

        # Load current block CSV dynamically
        blockFile1 = os.path.join(run1Folder, blockFilesRun1[blockIndex1])
        blockFile2 = os.path.join(run2Folder, blockFilesRun2[blockIndex2])

        # Handedness logic
        if expInfo["Enter subject's handedness:"].lower() == 'right':
            matchKey = '1'
            noMatchKey = '2'
            leftSideOfScreen = "MATCH\nPOINTER"
            rightSideOfScreen = "NO MATCH\nMIDDLE"
        else:
            matchKey = '2'
            noMatchKey = '1'
            leftSideOfScreen = "NO MATCH\nMIDDLE"
            rightSideOfScreen = "MATCH\nPOINTER"
  Routine Instructions
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    KeyboardComponent Continue_2
      allowedKeys = '2','3','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextboxComponent Instruction
      bold = True
      borderWidth = 0
      color = black
      editable = False
      letterHeight = 0.03
      size = (1, 1)
      startVal [time (s)] = 0.0
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      text:
        There are two games in this part of the study.

        They are "0-Back" and "2-Back"

        You will see the words "Target" or "2-back" before each game starts.
  Routine Instructions_2
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    KeyboardComponent Continue_3
      allowedKeys = '2','3','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextboxComponent Instruction_2
      bold = True
      borderWidth = 0
      color = black
      editable = False
      letterHeight = 0.03
      pos = (0, 0.25)
      size = (1, 1)
      startVal [time (s)] = 0.0
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      text:
        For "0-Back", press MATCH if you see a picture that is the same as the target picture.
        Press NO MATCH if it is not the same.
    TextboxComponent Target
      bold = True
      borderWidth = 0
      color = black
      editable = False
      letterHeight = 0.03
      pos = (-0.15, 0)
      size = (1, 1)
      startVal [time (s)] = 0.0
      text = Target          =
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    ImageComponent TargetImage
      image = VM Stimuli/PracticeFO3.bmp
      pos = (0.15, 0)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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  Routine Instructions_3
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    KeyboardComponent Continue_4
      allowedKeys = '2','3','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextboxComponent Instruction_3
      bold = True
      borderWidth = 0
      color = black
      editable = False
      letterHeight = 0.03
      pos = (0, 0.25)
      size = (1, 1)
      startVal [time (s)] = 0.0
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      text:
        For "2-back", press MATCH if the picture you see is the same as two pictures back.
        Press NO MATCH if not.
    PolygonComponent Green_Border
      fillColor = limegreen
      lineColor = limegreen
      pos = (-0.50, 0)
      shape = rectangle
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
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    ImageComponent Image_2Back
      image = VM Stimuli/PracticeFO3.bmp
      pos = (-0.50, 0)
      size = (0.13, 0.13)
      startVal [time (s)] = 0.0
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    ImageComponent Image_1Back
      image = VM Stimuli/PracticeFO1.bmp
      pos = (-0.30, 0)
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
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    ImageComponent Image_ToMatch
      image = VM Stimuli/PracticeFO3.bmp
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    TextboxComponent LEFTSIDESCREEN_CAPTION
      bold = True
      borderWidth = 0
      color = limegreen
      editable = False
      letterHeight = 0.03
      pos = (-0.20, -0.25)
      size = (1, 1)
      startVal [time (s)] = 0.0
      text [set every repeat] = $leftSideOfScreen
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    TextboxComponent RIGHTSIDESCREEN_CAPTION
      bold = True
      borderWidth = 0
      color = black
      editable = False
      letterHeight = 0.03
      pos = (0.20, -0.25)
      size = (1, 1)
      startVal [time (s)] = 0.0
      text [set every repeat] = $rightSideOfScreen
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  Routine Instructions_4
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    KeyboardComponent Continue_5
      allowedKeys = '2','3','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextboxComponent Instruction_4
      bold = True
      borderWidth = 0
      color = black
      editable = False
      letterHeight = 0.03
      size = (1, 1)
      startVal [time (s)] = 0.0
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      text:
        Please respond while the picture is on the screen.

        Press your POINTER finger for MATCH.
        Press your MIDDLE finger for NO MATCH.
  Routine Instructions_5
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    KeyboardComponent Continue_6
      allowedKeys = '2','3','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextboxComponent Instruction_5
      bold = True
      borderWidth = 0
      color = black
      editable = False
      letterHeight = 0.03
      size = (1, 1)
      startVal [time (s)] = 0.0
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      text:
        Pay close attention when the plus sign turns purple
        to see what game you are playing!
  Routine Waiting4Scanner
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    KeyboardComponent Continue_7
      allowedKeys = 't'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextboxComponent Scanner_Instruction
      bold = True
      borderWidth = 0
      color = black
      editable = False
      letterHeight = 0.03
      size = (1, 1)
      startVal [time (s)] = 0.0
      text = The task will begin momentarily. Waiting for scanner. Get ready...
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  Routine CueFix_Run1
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    TextboxComponent Cue_Fix
      bold = True
      borderWidth = 0
      color = $(1.0000, -1.0000, 1.0000)
      editable = False
      letterHeight = 0.05
      size = (1, 1)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.5
      text = +
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    CodeComponent run_Block_1
      Code Type = Py
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      Begin Routine:
        currentRun = 1
        currentBlock = BlockLoop_Run1.thisN
  Routine Fix5Sec
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    TextboxComponent Fix_5_Sec
      bold = True
      borderWidth = 0
      color = black
      editable = False
      letterHeight = 0.05
      size = (1, 1)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 5
      text = +
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  Routine Fix15Sec
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    TextboxComponent Fix_15_Sec
      bold = True
      borderWidth = 0
      color = black
      editable = False
      letterHeight = 0.05
      size = (1, 1)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 15
      text = +
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  Routine Instructions_6
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    KeyboardComponent Continue_8
      allowedKeys = '2','3','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextboxComponent Instruction_6
      bold = True
      borderWidth = 0
      color = black
      editable = False
      letterHeight = 0.03
      size = (1, 1)
      startVal [time (s)] = 0.0
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      text:
        Great Job!
        Again, the games will switch.

        Pay close attention when the plus sign turns purple
        to see what game you are playing!
  Routine Instructions_7
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    KeyboardComponent Continue_9
      allowedKeys = '2','3','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextboxComponent Instruction_7
      bold = True
      borderWidth = 0
      color = black
      editable = False
      letterHeight = 0.03
      size = (1, 1)
      startVal [time (s)] = 0.0
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      text:
        Please respond while the picture is on the screen.

        Press your POINTER finger for MATCH.
        Press your MIDDLE finger for NO MATCH.
  Routine Goodbye
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    KeyboardComponent Finish
      allowedKeys = '2', '3', 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextboxComponent All_Done
      bold = True
      borderWidth = 0
      color = black
      editable = False
      letterHeight = 0.03
      size = (1, 1)
      startVal [time (s)] = 0.0
      text = All done!
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  Routine CueFix_Run2
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    TextboxComponent Cue_Fix_2
      bold = True
      borderWidth = 0
      color = $(1.0000, -1.0000, 1.0000)
      editable = False
      letterHeight = 0.05
      size = (1, 1)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.5
      text = +
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    CodeComponent run_Block_2
      Code Type = Py
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      Begin Routine:
        currentRun = 2
        currentBlock = BlockLoop_Run2.thisN
  Routine Cue2Back
    RoutineSettingsComponent Cue2Back
      skipIf = not (BlockType == '2-Back' and ID == 1)
      stopVal [duration (s)] = 2.5
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    TextboxComponent Cue_2Back
      bold = True
      borderWidth = 0
      color = black
      editable = False
      letterHeight = 0.05
      size = (1, 1)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 2.5
      text = 2-Back
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  Routine Cue0Back
    RoutineSettingsComponent Cue0Back
      skipIf = not (BlockType == '0-Back' and ID == 1)
      stopVal [duration (s)] = 2.5
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    CodeComponent targetImageLogic
      Code Type = Py
      Begin Routine:
        if BlockType == "0-Back":
            targetImage = TargetStimulus
        else:
            targetImage = 'blackbg.png'
    TextboxComponent Cue_Target
      bold = True
      borderWidth = 0
      color = black
      editable = False
      letterHeight = 0.03
      pos = (-0.15, 0)
      size = (1, 1)
      startEstim = 0
      startVal [time (s)] = 0
      stopVal [duration (s)] = 2.5
      text = Target          =
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    ImageComponent Cue_TargetImage
      image [set every repeat] = $targetImage
      pos = (0.15, 0)
      size = (0.2, 0.2)
      startEstim = 0
      startVal [time (s)] = 0
      stopVal [duration (s)] = 2.5
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  Routine Fix
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    TextboxComponent End_Fix
      bold = True
      borderWidth = 0
      color = black
      editable = False
      letterHeight = 0.05
      size = (1, 1)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.5
      text = +
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  Routine Stim
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    CodeComponent targetLogic
      Code Type = Py
      Begin Routine:
        if CorrectResponse == 'Target':
            correctKey = matchKey
        else:
            correctKey = noMatchKey
    ImageComponent StimulusImage
      image [set every repeat] = $Stimulus
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
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    TextboxComponent LeftScreenResponse
      bold = True
      borderWidth = 0
      color = black
      editable = False
      letterHeight = 0.03
      pos = (-0.20, -0.25)
      size = (1, 1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      text [set every repeat] = $leftSideOfScreen
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    TextboxComponent RightScreenResponse
      bold = True
      borderWidth = 0
      color = black
      editable = False
      letterHeight = 0.03
      pos = (0.20, -0.25)
      size = (1, 1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      text [set every repeat] = $rightSideOfScreen
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    KeyboardComponent response
      allowedKeys = '2','3'
      correctAns = $correctKey
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      store = first key
      storeCorrect = True
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    CodeComponent recordDataLogic
      Code Type = Py
      End Routine:
        # ---------- IMPORT ----------
        from datetime import datetime

        # ---------- 1. Get current date and time ----------
        now = datetime.now()
        dateStr = now.strftime('%Y-%m-%d')   # e.g., 2026-01-08
        timeStr = now.strftime('%H:%M:%S')   # e.g., 14:23:01

        # ---------- 2. What they should have pressed ----------
        thisExp.addData('correctKey', correctKey)

        # ---------- 3. What they actually pressed ----------
        if response.keys is None:
            thisExp.addData('pressedKey', 'NA')
            thisExp.addData('accuracy', 'NA')
            thisExp.addData('RT', 'NA')
        else:
            thisExp.addData('pressedKey', response.keys)
            thisExp.addData('accuracy', response.corr)
            thisExp.addData('RT', response.rt)

        # ---------- 4. Date and time ----------
        thisExp.addData('date', dateStr)
        thisExp.addData('time', timeStr)

        # ---------- 5. Trial metadata ----------
        thisExp.addData('version', expInfo['Please select version:'])
        thisExp.addData('run', currentRun)
        thisExp.addData('block', currentBlock)
        thisExp.addData('id', ID)                  # From Excel
        thisExp.addData('stimulus', Stimulus)      # Stimulus filename
        thisExp.addData('stimType', StimType)      # Condition label

        # ---------- 6. Finish this row ----------
        thisExp.nextEntry()
  Routine EndBlock_Run1
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    CodeComponent blockLoopLogic_Run1
      Code Type = Py
      End Routine:
        # Move to next block
        blockIndex1 += 1

        if blockIndex1 >= len(blockFilesRun1):
            BlockLoop_Run1.finished = True
        else:
            # Load current block CSV dynamically
            blockFile1 = os.path.join(run1Folder, blockFilesRun1[blockIndex1])
            # Load data from a CSV file into a list of dictionaries
            csvData1 = data.importConditions(blockFile1)
            # Convert the list of dictionaries to a pandas DataFrame
            df1 = pd.DataFrame(csvData1)
  Routine EndBlock_Run2
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    CodeComponent blockLoopLogic_Run2
      Code Type = Py
      End Routine:
        blockIndex2 += 1
        if blockIndex2 >= len(blockFilesRun2):
            BlockLoop_Run2.finished = True
        else:
            # Load current block CSV dynamically
            blockFile2 = os.path.join(run2Folder, blockFilesRun2[blockIndex2])
            # Load data from a CSV file into a list of dictionaries
            csvData2 = data.importConditions(blockFile2)
            # Convert the list of dictionaries to a pandas DataFrame
            df2 = pd.DataFrame(csvData2)
Flow
  Routine TitlePage
  Routine Instructions
  Routine Instructions_2
  Routine Instructions_3
  Routine Instructions_4
  Routine Instructions_5
  Routine Waiting4Scanner
  LoopInitiator BlockLoop_Run1 loopType="TrialHandler"
    isTrials = False
    loopType = sequential
    nReps = num_blocks_run1
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    Routine CueFix_Run1
    LoopInitiator TrialLoop_Run1 loopType="TrialHandler"
      conditionsFile = $blockFile1
      loopType = sequential
      nReps = 1
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      Routine Cue2Back
      Routine Cue0Back
      Routine Stim
      Routine Fix
    LoopTerminator TrialLoop_Run1
    Routine EndBlock_Run1
  LoopTerminator BlockLoop_Run1
  Routine Fix15Sec
  Routine Fix5Sec
  Routine Instructions_6
  Routine Instructions_7
  Routine Waiting4Scanner
  LoopInitiator BlockLoop_Run2 loopType="TrialHandler"
    isTrials = False
    loopType = sequential
    nReps = num_blocks_run2
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    Routine CueFix_Run2
    LoopInitiator TrialLoop_Run2 loopType="TrialHandler"
      conditionsFile = $blockFile2
      loopType = sequential
      nReps = 1
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      Routine Cue2Back
      Routine Cue0Back
      Routine Stim
      Routine Fix
    LoopTerminator TrialLoop_Run2
    Routine EndBlock_Run2
  LoopTerminator BlockLoop_Run2
  Routine Goodbye
